PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'John Doe', 'session': 'Test'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = Main
  keyboardBackend = ioHub
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Routines
  Routine trial_1
    CodeComponent criticalCode_1
      Code Type = Py
      Begin Experiment:
        startTime_1 = 2.75
        anotherStartTime_1 = 2.85

        purpleCircles_1 = 0
        blueCircles_1 = 0
        yellowCircles_1 = 0

        trialsArray_1 = []
      Begin Routine:
        randomInt_1 = randint(2)

        mainTiming_1 = 0

        if randomInt_1 == 0 :
            mainTiming_1 = startTime_1
        else :
            mainTiming_1 = anotherStartTime_1
      End Routine:
        if stimType == 1 :
            if randomInt_1 == 0 :
                if respKeyboard_1.keys == [] :
                    if startTime_1 < 3.225 :
                        startTime_1 += 0.05
                    else :
                        startTime_1 = 3.25
                else :
                    purpleCircles_1 += 1

                    if startTime_1 > 2.575 :
                        startTime_1 -= 0.05
                    else :
                        startTime_1 = 2.55
            else :
                if respKeyboard_1.keys == [] :
                    if anotherStartTime_1 < 3.225 :
                        anotherStartTime_1 += 0.05
                    else :
                        anotherStartTime_1 = 3.25
                else :
                    purpleCircles_1 += 1

                    if anotherStartTime_1 > 2.575 :
                        anotherStartTime_1 -= 0.05
                    else :
                        anotherStartTime_1 = 2.55
        elif stimType == 0 and stimColor == 'blue' :
            if respKeyboard_1.keys == [] :
                blueCircles_1 += 1
        elif stimType == 0 and stimColor == 'yellow' :
            if respKeyboard_1.keys == [] :
                yellowCircles_1 += 1
        else :
            pass

        if respKeyboard_1.rt != [] :
            trialsArray_1.append(respKeyboard_1.rt)

        trials_1.addData('ssd', str(mainTiming_1 - 2.50))
    PolygonComponent fixationPolygon_1
      fillColor = gray
      lineColor = gray
      nVertices = 100
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 1.70
      units = cm
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    KeyboardComponent respKeyboard_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      store = first key
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    PolygonComponent targetPolygon_1
      fillColor [set every repeat] = $stimColor
      lineColor [set every repeat] = $stimColor
      nVertices = 100
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      units = cm
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    PolygonComponent stopPolygon_1
      fillColor = purple
      lineColor = purple
      nVertices = 100
      opacity [set every repeat] = stimType
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = mainTiming_1
      stopVal [time (s)] = 3.30
      units = cm
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  Routine instruction_1
    TextComponent beginningText_1
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در قسمت بعدی تست احتمال تبدیل شدن مربع زرد به بنفش ۲/۳ است.
        از سه باری که مربع زرد ارائه می شود، دو بار تبدیل به مربع بنفش می شود.
        دقت داشته باشید که این روال کاملا تصادفی است.
    KeyboardComponent redirectToExp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    PolygonComponent practiceFixationPolygon
      fillColor = gray
      lineColor = gray
      nVertices = 100
      shape = regular polygon...
      size = (6.096, 6.096)
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 1.70
      units = cm
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    KeyboardComponent practiceRespKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      store = nothing
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    PolygonComponent practiceTargetPolygon
      fillColor [set every repeat] = $stimColor
      lineColor [set every repeat] = $stimColor
      nVertices = 100
      shape = regular polygon...
      size = (6.096, 6.096)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      units = cm
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    PolygonComponent practiceStopPolygon
      fillColor = purple
      lineColor = purple
      nVertices = 100
      opacity [set every repeat] = stimType
      shape = regular polygon...
      size = (6.096, 6.096)
      startVal [time (s)] = 2.75
      stopVal [time (s)] = 3.30
      units = cm
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  Routine endPractice
    CodeComponent endPracticeCode
      Code Type = Py
      End Routine:
        if endPracticeKeyboard.keys == 'n' :
            endPracticeLoop.finished = True
        else :
            pass
    TextComponent endPracticeText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = آیا نیاز به تمرین بیشتر دارید؟
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    KeyboardComponent endPracticeKeyboard
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine practiceInstruction
    TextComponent practiceInstructionText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        رنگ خاکستری: نیازی به پاسخ نیست.
        رنگ آبی: همیشه پاسخ بدهید.
        رنگ بنفش: نباید پاسخ بدهید.
        رنگ زرد: پاسخ بدهید اما در بعضی مواقع ممکن است تبدیل به بنفش بشود.
    KeyboardComponent practiceInstructionKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialEnd
    TextComponent trialEndText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        از همکاری شما در این پژوهش صمیمانه متشکریم.
        آیا مایل هستید در پژوهش های دیگر ما هم شرکت کنید؟
    KeyboardComponent trialEndKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_1
    CodeComponent feedbackCode_1
      Code Type = Py
      Begin Routine:
        average_1 = np.average(trialsArray_1)

        if average_1 > 0.60 :
            feedback_1 = f"""
        میانگین زمان واکنش شما {average_1} بوده است.
        لطفا با سرعت و دقت بیشتری پاسخ بدهید.
        دایره های بنفش پاسخ داده شده : {purpleCircles_1}
        دایره های آبی پاسخ داده نشده : {blueCircles_1}
        دایره های زرد پاسخ داده نشده : {yellowCircles_1}
        """
        else:
            feedback_1 = f"""
        میانگین زمان واکنش شما {average_1} بوده است.
        سرعت پاسخگویی‌تان خوب بوده است.
        دایره های بنفش پاسخ داده شده : {purpleCircles_1}
        دایره های آبی پاسخ داده نشده : {blueCircles_1}
        دایره های زرد پاسخ داده نشده : {yellowCircles_1}
        """
    TextComponent averageText_1
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.5
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      text [set during: feedback_1.ISI_1]:
        """
        متشکرم.
        لطفا آزمون‌گر را فرا بخوانید.
        """ + $feedback_1 + """
        چند دقیقه استراحت کنید.
        """
    StaticComponent ISI_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent feedbackKeyboard_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.50
      store = nothing
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  Routine instruction_2
    TextComponent beginningText_2
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در قسمت بعدی تست احتمال تبدیل شدن مربع زرد به بنفش ۱/۳ است.
        از سه باری که مربع زرد ارائه می شود، یکبار تبدیل به مربع بنفش می شود.
        دقت داشته باشید که این روال کاملا تصادفی است.
    KeyboardComponent redirectToExp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2
    CodeComponent criticalCode_2
      Code Type = Py
      Begin Experiment:
        startTime_2 = 2.75
        anotherStartTime_2 = 2.85

        purpleCircles_2 = 0
        blueCircles_2 = 0
        yellowCircles_2 = 0

        trialsArray_2 = []
      Begin Routine:
        randomInt_2 = randint(2)

        mainTiming_2 = 0

        if randomInt_2 == 0 :
            mainTiming_2 = startTime_2
        else :
            mainTiming_2 = anotherStartTime_2
      End Routine:
        if stimType == 1 :
            if randomInt_2 == 0 :
                if respKeyboard_2.keys == [] :
                    if startTime_2 < 3.225 :
                        startTime_2 += 0.05
                    else :
                        startTime_2 = 3.25
                else :
                    purpleCircles_2 += 1

                    if startTime_2 > 2.575 :
                        startTime_2 -= 0.05
                    else :
                        startTime_2 = 2.55
            else :
                if respKeyboard_2.keys == [] :
                    if anotherStartTime_2 < 3.225 :
                        anotherStartTime_2 += 0.05
                    else :
                        anotherStartTime_2 = 3.25
                else :
                    purpleCircles_2 += 1

                    if anotherStartTime_2 > 2.575 :
                        anotherStartTime_2 -= 0.05
                    else :
                        anotherStartTime_2 = 2.55
        elif stimType == 0 and stimColor == 'blue' :
            if respKeyboard_2.keys == [] :
                blueCircles_2 += 1
        elif stimType == 0 and stimColor == 'yellow' :
            if respKeyboard_2.keys == [] :
                yellowCircles_2 += 1
        else :
            pass

        if respKeyboard_2.rt != [] :
            trialsArray_2.append(respKeyboard_2.rt)

        trials_2.addData('ssd', str(mainTiming_2 - 2.50))
    PolygonComponent fixationPolygon_2
      fillColor = gray
      lineColor = gray
      nVertices = 100
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 1.70
      units = cm
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    KeyboardComponent respKeyboard_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      store = first key
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    PolygonComponent targetPolygon_2
      fillColor [set every repeat] = $stimColor
      lineColor [set every repeat] = $stimColor
      nVertices = 100
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      units = cm
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    PolygonComponent stopPolygon_2
      fillColor = purple
      lineColor = purple
      nVertices = 100
      opacity [set every repeat] = stimType
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = mainTiming_2
      stopVal [time (s)] = 3.30
      units = cm
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  Routine feedback_2
    CodeComponent feedbackCode_2
      Code Type = Py
      Begin Routine:
        average_2 = np.average(trialsArray_2)

        if average_2 > 0.60 :
            feedback_2 = f"""
        میانگین زمان واکنش شما {average_2} بوده است.
        لطفا با سرعت و دقت بیشتری پاسخ بدهید.
        دایره های بنفش پاسخ داده شده : {purpleCircles_2}
        دایره های آبی پاسخ داده نشده : {blueCircles_2}
        دایره های زرد پاسخ داده نشده : {yellowCircles_2}
        """
        else:
            feedback_2 = f"""
        میانگین زمان واکنش شما {average_2} بوده است.
        سرعت پاسخگویی‌تان خوب بوده است.
        دایره های بنفش پاسخ داده شده : {purpleCircles_2}
        دایره های آبی پاسخ داده نشده : {blueCircles_2}
        دایره های زرد پاسخ داده نشده : {yellowCircles_2}
        """
    TextComponent averageText_2
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.5
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      text [set during: feedback_2.ISI_2]:
        """
        متشکرم.
        لطفا آزمون‌گر را فرا بخوانید.
        """ + $feedback_2 + """
        چند دقیقه استراحت کنید.
        """
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent feedbackKeyboard_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.50
      store = nothing
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  Routine instruction_3
    TextComponent beginningText_3
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در قسمت بعدی تست احتمال تبدیل شدن مربع زرد به بنفش ۱/۳ است.
        از سه باری که مربع زرد ارائه می شود، یکبار تبدیل به مربع بنفش می شود.
        دقت داشته باشید که این روال کاملا تصادفی است.
    KeyboardComponent redirectToExp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_3
    CodeComponent criticalCode_3
      Code Type = Py
      Begin Experiment:
        startTime_3 = 2.75
        anotherStartTime_3 = 2.85

        purpleCircles_3 = 0
        blueCircles_3 = 0
        yellowCircles_3 = 0

        trialsArray_3 = []
      Begin Routine:
        randomInt_3 = randint(2)

        mainTiming_3 = 0

        if randomInt_3 == 0 :
            mainTiming_3 = startTime_3
        else :
            mainTiming_3 = anotherStartTime_3
      End Routine:
        if stimType == 1 :
            if randomInt_3 == 0 :
                if respKeyboard_3.keys == [] :
                    if startTime_3 < 3.225 :
                        startTime_3 += 0.05
                    else :
                        startTime_3 = 3.25
                else :
                    purpleCircles_3 += 1

                    if startTime_3 > 2.575 :
                        startTime_3 -= 0.05
                    else :
                        startTime_3 = 2.55
            else :
                if respKeyboard_3.keys == [] :
                    if anotherStartTime_3 < 3.225 :
                        anotherStartTime_3 += 0.05
                    else :
                        anotherStartTime_3 = 3.25
                else :
                    purpleCircles_3 += 1

                    if anotherStartTime_3 > 2.575 :
                        anotherStartTime_3 -= 0.05
                    else :
                        anotherStartTime_3 = 2.55
        elif stimType == 0 and stimColor == 'blue' :
            if respKeyboard_3.keys == [] :
                blueCircles_3 += 1
        elif stimType == 0 and stimColor == 'yellow' :
            if respKeyboard_3.keys == [] :
                yellowCircles_3 += 1
        else :
            pass

        if respKeyboard_3.rt != [] :
            trialsArray_3.append(respKeyboard_3.rt)

        trials_3.addData('ssd', str(mainTiming_3 - 2.50))
    PolygonComponent fixationPolygon_3
      fillColor = gray
      lineColor = gray
      nVertices = 100
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = 0.80
      stopVal [duration (s)] = 1.70
      units = cm
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    KeyboardComponent respKeyboard_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      store = first key
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    PolygonComponent targetPolygon_3
      fillColor [set every repeat] = $stimColor
      lineColor [set every repeat] = $stimColor
      nVertices = 100
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.80
      units = cm
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    PolygonComponent stopPolygon_3
      fillColor = purple
      lineColor = purple
      nVertices = 100
      opacity [set every repeat] = stimType
      shape = regular polygon...
      size = (6.069, 6.069)
      startVal [time (s)] = mainTiming_3
      stopVal [time (s)] = 3.30
      units = cm
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  Routine feedback_3
    CodeComponent feedbackCode_3
      Code Type = Py
      Begin Routine:
        average_3 = np.average(trialsArray_3)

        if average_3 > 0.60 :
            feedback_3 = f"""
        میانگین زمان واکنش شما {average_3} بوده است.
        لطفا با سرعت و دقت بیشتری پاسخ بدهید.
        دایره های بنفش پاسخ داده شده : {purpleCircles_3}
        دایره های آبی پاسخ داده نشده : {blueCircles_3}
        دایره های زرد پاسخ داده نشده : {yellowCircles_3}
        """
        else:
            feedback_3 = f"""
        میانگین زمان واکنش شما {average_3} بوده است.
        سرعت پاسخگویی‌تان خوب بوده است.
        دایره های بنفش پاسخ داده شده : {purpleCircles_3}
        دایره های آبی پاسخ داده نشده : {blueCircles_3}
        دایره های زرد پاسخ داده نشده : {yellowCircles_3}
        """
    TextComponent averageText_3
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.5
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      text [set during: feedback_3.ISI_3]:
        """
        متشکرم.
        لطفا آزمون‌گر را فرا بخوانید.
        """ + $feedback_3 + """
        چند دقیقه استراحت کنید.
        """
    StaticComponent ISI_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent feedbackKeyboard_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.50
      store = nothing
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  Routine instruction_4
    TextComponent beginningText_4
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در قسمت بعدی تست احتمال تبدیل شدن مربع زرد به بنفش ۲/۳ است.
        از سه باری که مربع زرد ارائه می شود، دو بار تبدیل به مربع بنفش می شود.
        دقت داشته باشید که این روال کاملا تصادفی است.
    KeyboardComponent redirectToExp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_4
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  Routine feedback_4
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  Routine instruction_5
    TextComponent beginningText_5
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در قسمت بعدی تست احتمال تبدیل شدن مربع زرد به بنفش ۱/۳ است.
        از سه باری که مربع زرد ارائه می شود، یکبار تبدیل به مربع بنفش می شود.
        دقت داشته باشید که این روال کاملا تصادفی است.
    KeyboardComponent redirectToExp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_5
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  Routine feedback_5
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  Routine instruction_6
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  Routine trial_6
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  Routine feedback_6
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Flow
  Routine practiceInstruction
  LoopInitiator endPracticeLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator practices loopType="TrialHandler"
      conditionsFile = Practice.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
        OrderedDict([('stimType', 0), ('stimColor', 'blue')])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
      Routine practice
    LoopTerminator practices
    Routine endPractice
  LoopTerminator endPracticeLoop
  Routine instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = YellowPriority.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')])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
    Routine trial_2
  LoopTerminator trials_2
  Routine feedback_2
  Routine instruction_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = YellowPriority.xlsx
    loopType = random
    nReps = 5
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    conditions:
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    Routine trial_3
  LoopTerminator trials_3
  Routine feedback_3
  Routine instruction_1
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = PurplePriority.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'blue')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 0), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')]),
      OrderedDict([('stimType', 1), ('stimColor', 'yellow')])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
    Routine trial_1
  LoopTerminator trials_1
  Routine feedback_1
  Routine instruction_5
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = YellowPriority.xlsx
    loopType = random
    nReps = 5
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    conditions:
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    Routine trial_5
  LoopTerminator trials_5
  Routine feedback_5
  Routine instruction_6
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = YellowPriority.xlsx
    loopType = random
    nReps = 5
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    conditions:
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    Routine trial_6
  LoopTerminator trials_6
  Routine feedback_6
  Routine instruction_4
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = PurplePriority.xlsx
    loopType = random
    nReps = 5
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    conditions:
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    Routine trial_4
  LoopTerminator trials_4
  Routine feedback_4
  Routine trialEnd
