PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'John Doe', 'session': 'Test'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = Main
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent criticalCode
      Code Type = Py
      Begin Experiment:
        trialsFeedback = []

        startTime = 0.85
        anotherStartTime = 0.95
      Begin Routine:
        randomInt = randint(2)

        mainTiming = 0

        if randomInt == 0 :
            mainTiming = startTime
        else :
            mainTiming = anotherStartTime
      End Routine:
        if randomInt == 0 :
            trials.addData('ssd', startTime - 0.60)
            trialsFeedback.append(startTime - 0.60)
        else :
            trials.addData('ssd', anotherStartTime - 0.70)
            trialsFeedback.append(anotherStartTime - 0.70)

        if stimType == 0 :
            if randomInt == 0 :
                if respKeyboard.keys == [] :
                    startTime += 0.05
                else :
                    if startTime > 0.675 :
                        startTime -= 0.05
                    else :
                        startTime = 0.65
            else :
                if respKeyboard.keys == [] :
                    anotherStartTime += 0.05
                else :
                    if anotherStartTime > 0.675 :
                        anotherStartTime -= 0.05
                    else :
                        anotherStartTime = 0.65
        else :
            pass
    TextComponent staticSign
      font = Calibri
      letterHeight = 0.75
      startVal [time (s)] = 0.10
      stopVal [duration (s)] = 2.5
      text = ⚪
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    KeyboardComponent respKeyboard
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.60
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent targetSign
      font = Calibri
      letterHeight = 0.37
      startVal [time (s)] = 0.60
      stopVal [duration (s)] = 2
      text [set every repeat] = $stimTarget
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    SoundComponent beepSound
      sound = 500
      startVal [time (s)] = mainTiming
      stopVal [duration (s)] = 0.50
      volume [set every repeat] = beepVol
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  Routine instruction
    TextComponent beginningText
      font = Calibri
      letterHeight = 0.060
      startVal [time (s)] = 0.0
      text = Press "Start" To Start.
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    KeyboardComponent redirectToExp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    CodeComponent criticalCodePra
      Code Type = Py
      Begin Experiment:
        startTimePra = 0.85
      End Routine:
        if stimType == 0 :
            if respKeyboardPra.keys == [] :
                startTimePra += 0.05
            else :
                if startTimePra > 0.675 :
                    startTimePra -= 0.05
                else :
                    startTimePra = 0.65
        else :
            pass
    TextComponent staticSignPra
      font = Calibri
      letterHeight = 0.75
      startVal [time (s)] = 0.10
      stopVal [duration (s)] = 2.5
      text = ⚪
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    KeyboardComponent respKeyboardPra
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.60
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent targetSignPra
      font = Calibri
      letterHeight = 0.37
      startVal [time (s)] = 0.60
      stopVal [duration (s)] = 2
      text [set every repeat] = $stimTarget
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    SoundComponent beepSoundPra
      sound = 500
      startVal [time (s)] = startTime
      stopVal [duration (s)] = 0.50
      volume [set every repeat] = beepVol
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  Routine practiceInstruction
    TextComponent practiceText
      font = Calibri
      letterHeight = 0.060
      startVal [time (s)] = 0.0
      text = Press "Space" To Start The Practice.
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    KeyboardComponent practiceKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endPracticeOrNot
    CodeComponent endPracticeOrNotKeyboard
      Code Type = Py
      End Routine:
        if endPracticeKeyboard.keys == 'y' :
            startPracticeAgain.finished = True
        else :
            pass
    TextComponent endPracticeText
      font = Calibri
      letterHeight = 0.060
      startVal [time (s)] = 0.0
      text = End Practice Or Not ? Y/Yes, N/No
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    KeyboardComponent endPracticeKeyboard
      allowedKeys = 'y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine timeFeedback
    TextComponent feedbackText
      font = Calibri
      letterHeight = 0.060
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set during: timeFeedback.loadData] = 'Your Time Average :\n' + $str(np.average(trialsFeedback))
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    StaticComponent loadData
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine practiceInstruction
  LoopInitiator startPracticeAgain loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator practices loopType="TrialHandler"
      conditionsFile = SST.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimType', 0), ('beepVol', 1), ('corrResp', 'left'), ('stimTarget', '←')]),
        OrderedDict([('stimType', 0), ('beepVol', 1), ('corrResp', 'right'), ('stimTarget', '→')]),
        OrderedDict([('stimType', 0), ('beepVol', 1), ('corrResp', 'left'), ('stimTarget', '←')])]
      Routine practice
    LoopTerminator practices
    Routine endPracticeOrNot
  LoopTerminator startPracticeAgain
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SST.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimType', 0), ('beepVol', 1), ('corrResp', 'left'), ('stimTarget', '←')]),
      OrderedDict([('stimType', 0), ('beepVol', 1), ('corrResp', 'right'), ('stimTarget', '→')]),
      OrderedDict([('stimType', 0), ('beepVol', 1), ('corrResp', 'left'), ('stimTarget', '←')])]
    Routine trial
  LoopTerminator trials
  Routine timeFeedback
